---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1366
set uniform_coordinates yes
set title gnet4s_delay_recall_subjsimratings_grp3
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "44ce5711-3410-8e1d-b7cf-fb7ecadcb0bf"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:/Users/zymotik/Documents/gnet_recall_analysis/viki_subjsimilarity_ratings/delay"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define sequence comparison_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fam_v_rec_pres always
	run similarity_rating always
	run logeachresp always

define loop comparisons_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 992
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 reprpict "a74d3k_1682521814244-1.png"
	setcycle 0 fampict "prototype1.png"
	setcycle 1 reprpict "a74d3k_1682521814244-2.png"
	setcycle 1 fampict "prototype1.png"
	setcycle 2 reprpict "a74d3k_1682521814244-3.png"
	setcycle 2 fampict "prototype1.png"
	setcycle 3 reprpict "a74d3k_1682521814244-4.png"
	setcycle 3 fampict "prototype1.png"
	setcycle 4 reprpict "bb93kz_1682597917090-1.png"
	setcycle 4 fampict "prototype1.png"
	setcycle 5 reprpict "bb93kz_1682597917090-2.png"
	setcycle 5 fampict "prototype1.png"
	setcycle 6 reprpict "bb93kz_1682597917090-3.png"
	setcycle 6 fampict "prototype1.png"
	setcycle 7 reprpict "bb93kz_1682597917090-4.png"
	setcycle 7 fampict "prototype1.png"
	setcycle 8 reprpict "bbsbyu_1699959256491-1.png"
	setcycle 8 fampict "prototype1.png"
	setcycle 9 reprpict "bbsbyu_1699959256491-2.png"
	setcycle 9 fampict "prototype1.png"
	setcycle 10 reprpict "bbsbyu_1699959256491-3.png"
	setcycle 10 fampict "prototype1.png"
	setcycle 11 reprpict "bbsbyu_1699959256491-4.png"
	setcycle 11 fampict "prototype1.png"
	setcycle 12 reprpict "bcapsn729capsk_1700480749537-1.png"
	setcycle 12 fampict "prototype1.png"
	setcycle 13 reprpict "bcapsn729capsk_1700480749537-2.png"
	setcycle 13 fampict "prototype1.png"
	setcycle 14 reprpict "bcapsn729capsk_1700480749537-3.png"
	setcycle 14 fampict "prototype1.png"
	setcycle 15 reprpict "bcapsn729capsk_1700480749537-4.png"
	setcycle 15 fampict "prototype1.png"
	setcycle 16 reprpict "bnbq2z_1682667274202-1.png"
	setcycle 16 fampict "prototype1.png"
	setcycle 17 reprpict "bnbq2z_1682667274202-2.png"
	setcycle 17 fampict "prototype1.png"
	setcycle 18 reprpict "bnbq2z_1682667274202-3.png"
	setcycle 18 fampict "prototype1.png"
	setcycle 19 reprpict "bnbq2z_1682667274202-4.png"
	setcycle 19 fampict "prototype1.png"
	setcycle 20 reprpict "bto5xt_1685037259501-1.png"
	setcycle 20 fampict "prototype1.png"
	setcycle 21 reprpict "bto5xt_1685037259501-2.png"
	setcycle 21 fampict "prototype1.png"
	setcycle 22 reprpict "bto5xt_1685037259501-3.png"
	setcycle 22 fampict "prototype1.png"
	setcycle 23 reprpict "bto5xt_1685037259501-4.png"
	setcycle 23 fampict "prototype1.png"
	setcycle 24 reprpict "byp0c8_1682596898062-1.png"
	setcycle 24 fampict "prototype1.png"
	setcycle 25 reprpict "byp0c8_1682596898062-2.png"
	setcycle 25 fampict "prototype1.png"
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	setcycle 248 reprpict "a74d3k_1682521814244-1.png"
	setcycle 248 fampict "prototype2.png"
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	setcycle 496 reprpict "a74d3k_1682521814244-1.png"
	setcycle 496 fampict "prototype3.png"
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	setcycle 744 reprpict "a74d3k_1682521814244-1.png"
	setcycle 744 fampict "prototype4.png"
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	run ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run new_sketchpad True
	run new_1_loop True
	run new_2_sketchpad True
	run new_loop True

define sketchpad fam_v_rec_pres
	set duration 1500
	set description "Displays stimuli"
	draw image center=1 file="[prt_id]" scale=1 show_if=always x=-288 y=0 z_index=0
	draw image center=1 file="[img_id]" scale=1 show_if=always x=288 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="1 - not at all similar; 9 - exactly the same" x=0 y=320 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define logger logeachresp
	set description "Logs experimental data"
	set auto_log yes

define loop new_1_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 gnet4s_artn_recall1 "fxhvbj-1.png"
	setcycle 0 gnet4s_artn_recall2 "ixi976-2.png"
	setcycle 1 gnet4s_artn_recall1 "hfpvcf-2.png"
	setcycle 1 gnet4s_artn_recall2 "ptoup8-4.png"
	setcycle 2 gnet4s_artn_recall1 "fxhvbj-4.png"
	setcycle 2 gnet4s_artn_recall2 "v1453j-3.png"
	run new_sequence

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="[gnet4s_artn_recall1]" scale=1 show_if=always x=-288 y=0 z_index=0
	draw image center=1 file="[gnet4s_artn_recall2]" scale=1 show_if=always x=288 y=0 z_index=0

define sketchpad new_2_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=29 html=yes show_if=True text="Next, the experiment will begin.<br />Remember: <br />You can rate the similarity of the reproduced stimulus<br />by pressing the number keys (1-9).<br />1: not at all similar<br />9: exactly the same<br /><br />Press space to continue to the experiment." x=0 y=0 z_index=0

define sketchpad new_3_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[prototypes]" scale=1 show_if=always x=-288 y=0 z_index=0
	draw image center=1 file="[recall]" scale=1 show_if=always x=288 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="1 - not at all similar; 9 - exactly the same" x=0 y=320 z_index=0

define loop new_loop
	set source_file "3.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run comparison_seq

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_1_sketchpad True

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="Here are a few examples for the items you'll see:" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="Press space to continue" x=0 y=224 z_index=0

define keyboard_response similarity_rating
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="This program is to collect subjective similarity ratings<br />for the recalled stimuli in a novel experiment with GNET.<br /><br />You will see the original stimulus on the left side of the screen<br />and a reproduction on the right side.<br />You can rate the similarity of the reproduced stimulus<br />by pressing the number keys (1-9).<br />1: not at all similar<br />9: exactly the same<br /><br />Press space to continue." x=-12 y=5 z_index=0

